'CR1000X Series
'Created by Short Cut (4.4)

'Declare Variables and Units
Public BattV
Public PTemp_C
Public Stage
Public Sampler_On As Boolean

Units BattV=Volts
Units PTemp_C=Deg C
Units Stage=mV

'Define Data Tables
DataTable(Table1,True,-1)
	DataInterval(0,1,Min,10)
	Average(1,Stage,FP2,False)
	Sample(1,Sampler_On,FP2)
EndTable

'Main Program
BeginProg
	'Main Scan
	Scan(1,Sec,1,0)
		'Default CR1000X Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default CR1000X Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,60)
		'Generic 4-20 mA (2-wire with internal shunt and datalogger power) measurement 'Stage'
		CurrentSE(Stage,1,mV1000,RG1,True,0,60,4.6875,-14.75)
		'Simple Control w/ Deadband
		If Sampler_On=False Then
			If Stage>12 Then
				PortSet(C4,1)
			Else
				If Stage<12 Then
					PortSet(C4,0)
				EndIf
			EndIf
		Else
			PortSet(C4,0)
		EndIf
		'Call Data Tables and Store Data
		CallTable Table1
	NextScan
EndProg
