'CR1000X Series
'Created by Short Cut (4.4)

'Declare Variables and Units
Public BattV
Public PTemp_C
Public CS65X(6)
Public Rain_in
Public LVData(8)
Public Measure
Public DisableFlag As Boolean

Alias CS65X(1)=VWC
Alias CS65X(2)=EC
Alias CS65X(3)=T
Alias CS65X(4)=P
Alias CS65X(5)=PA
Alias CS65X(6)=VR
Alias LVData(1)=Stage
Alias LVData(2)=Line_PSI
Alias LVData(3)=Tank_PSI
Alias LVData(4)=LVB10_Temp
Alias LVData(5)=LVB10_Batt
Alias LVData(6)=LVB10_ErrorCode
Alias LVData(7)=Crest_Stage
Alias LVData(8)=Crest_Tm_Offs

Units BattV=Volts
Units PTemp_C=Deg C
Units Rain_in=inch
Units Measure=mV
Units VWC=m^3/m^3
Units EC=dS/m
Units T=Deg F
Units P=unitless
Units PA=nSec
Units VR=unitless
Units Stage=feet
Units Line_PSI=PSI
Units Tank_PSI=PSI
Units LVB10_Temp=Deg F
Units LVB10_Batt=volts
Units LVB10_ErrorCode=code
Units Crest_Stage=feet
Units Crest_Tm_Offs=seconds

'Define Data Tables
DataTable(Table1,True,-1)
	DataInterval(0,1,Min,10)
	Average(1,VWC,FP2,False)
	Average(1,EC,FP2,False)
	Average(1,T,FP2,False)
	Average(1,P,FP2,False)
	Average(1,PA,FP2,False)
	Average(1,VR,FP2,False)
	Totalize(1,Rain_in,FP2,False)
	Average(1,Stage,FP2,False)
	Average(1,Measure,FP2,False)
	Average(1,DisableFlag,FP2,False)
EndTable

'Main Program
BeginProg
	'Main Scan
	Scan(1,Sec,1,0)
		'Default CR1000X Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default CR1000X Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,60)
		'CS650/CS655 Water Content Reflectometer measurements 'VWC', 'EC', 'T','P', 'PA', and 'VR'
		SDI12Recorder(CS65X(),C3,"0","M4!",1,0,-1)
		T=T*1.8+32
		'Generic Tipping Bucket Rain Gauge measurement 'Rain_in'
		PulseCount(Rain_in,1,P1,1,0,0.1,0)
		'LevelVUEB10 Water-Level Continuous Flow Bubbler measurements 'Stage', 'Line_PSI',Tank_PSI',
		'LVB10_Temp', 'LVB10_Batt', 'LVB10_ErrorCode', 'Crest_Stage', and 'Crest_Tm_Offs'
		If TimeIntoInterval(0,1,Min) Then
			SDI12Recorder(LVData(),C7,"0","M!",1,0,-1)
			'Convert 'LVB10_Temp' in Deg C to Deg F
			LVB10_Temp=LVB10_Temp*1.8+32
		EndIf
		'Generic 4-20 mA (2-wire with internal shunt and datalogger power) measurement 'Measure'
		CurrentSE(Measure,1,mV1000,RG1,True,0,60,4.6875,-14.75)
		'Simple Control w/ Deadband
		If DisableFlag=False Then
			If Measure>10 Then
				PortSet(C1,1)
			Else
				If Measure<0 Then
					PortSet(C1,0)
				EndIf
			EndIf
		Else
			PortSet(C1,0)
		EndIf
		'Call Data Tables and Store Data
		CallTable Table1
	NextScan
EndProg
