'CR1000X Series
'Created by Short Cut (4.4)

'Declare Variables and Units
Public BattV
Public PTemp_C
Public Ultra

Units BattV=Volts
Units PTemp_C=Deg C
Units Ultra=mm

'Define Data Tables
DataTable(Test_data_table,True,-1)
	DataInterval(0,5,Sec,10)
	Average(1,Ultra,FP2,False)
	Sample(1,Ultra,FP2)
EndTable

DataTable(Table2,True,-1)
	DataInterval(0,1440,Min,10)
	Minimum(1,BattV,FP2,False,False)
EndTable

'Main Program
BeginProg
	'Main Scan
	Scan(1,Sec,1,0)
		'Default CR1000X Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default CR1000X Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,60)
		'Generic 4-20 mA (2-wire with internal shunt and datalogger power) measurement 'Ultra'
		CurrentSE(Ultra,1,mV1000,RG2,True,0,50,666.75,-2667)
		'Call Data Tables and Store Data
		CallTable Test_data_table
		CallTable Table2
	NextScan
EndProg
