'CR1000X Series
'Created by Jorge Perez (JorgePrez465)

'Declare Variables and Units
Public Batt_V
Public PanelTemp_C
Public Ultrasonic
Public Rain_inch
Public TDR(3)
Public Raining As BOOLEAN
Public Elapsed
Public BubblerData(3)

' Bubbler Data, assign a name to each array component from SDI-12
Alias BubblerData(1)=Stage
Alias BubblerData(2)=Line_PSI
Alias BubblerData(3)=Tank_PSI

' TDR Data array
Alias TDR(1)=VWC
Alias TDR(2)=EC
Alias TDR(3)=T


Units Batt_V=Volts
Units PanelTemp_C=Deg C
Units Rain_inch=inch
Units VWC=m^3/m^3
Units EC=dS/m
Units T=Deg C
Units Line_PSI=PSI
Units Tank_PSI=PSI
Units Stage=inch

'Define Data Tables
DataTable(Data_TableA,True,-1)
	DataInterval(0,5,Min,10)
	Average(1,Stage,FP2,False)
	Sample(1,Stage,FP2)
	Sample(1,Line_PSI,FP2)
	Average(1,VWC,FP2,False)
	Average(1,EC,FP2,False)
	Average(1,T,FP2,False)
	Totalize(1,Rain_inch,FP2,False)
	Average(1,Ultrasonic,FP2,False)
EndTable


BeginProg
	Scan(1,Sec,1,0)
		Battery(Batt_V)
		PanelTemp(PanelTemp_C,60)
		
		PulseCount(Rain_inch,1,P1,1,0,0.01,0)
		If Rain_inch > 0 Then 
			Timer(1, hr, 2)
			Raining = 1 ' True 
		EndIf
		If Elapsed >= 4 Then ' if 4 hours after raining starts have passed
			Raining = 0
			Timer(1, hr, 3)
		EndIf
		If Raining Then
			SW12(SW12_1,1)
			CurrentSE(Ultrasonic,1,Autorange,RG2,True,0,50,0,1)	' Freq = 50Hz
		EndIf
		If TimeIntoInterval(0,1,Hr) Then
			SDI12Recorder(TDR(),C3,"0","M!",1,0,-1)
		EndIf

		If TimeIntoInterval(0,5,min) AND Raining Then
			SDI12Recorder(BubblerData(),C7,"0","M!",1,0,-1)
		EndIf
		Elapsed = Timer(1,hr, 4)
		CallTable Data_TableA
	NextScan
EndProg

