'CR1000X Series
'Created by Jorge Perez (JorgePrez465)

'Declare Variables and Units
Public Batt_V
Public PanelTemp_C
Public Ultrasonic
Public Rain_inch
Public TDR(3)
Public Raining As BOOLEAN
Public Elapsed

Alias TDR(1)=VWC
Alias TDR(2)=EC
Alias TDR(3)=T

Units Batt_V=Volts
Units PanelTemp_C=Deg C
Units Ultrasonic=in
Units Rain_inch=inch
Units VWC=m^3/m^3
Units EC=dS/m
Units T=Deg C

'Define Data Tables
DataTable(Data_TableA,True,-1)
	DataInterval(0,5,Min,10)
	Average(1,Ultrasonic,FP2,False)
	Average(1,VWC,FP2,False)
	Average(1,EC,FP2,False)
	Average(1,T,FP2,False)
	Totalize(1,Rain_inch,FP2,False)
EndTable


BeginProg
	Scan(1,Sec,1,0)
		Battery(Batt_V)
		PanelTemp(PanelTemp_C,60)
		
		PulseCount(Rain_inch,1,P1,1,0,0.01,0)
		If Rain_inch > 0 Then 
			Timer(1, hr, 2)
			Raining = 1 ' True 
		EndIf
		If Elapsed >= 24 Then
			SW12(SW12_1,0)
			Raining = 0
			Timer(1, hr, 3)
		EndIf
		If Raining Then
			SW12(SW12_1,1)
			CurrentSE(Ultrasonic,1,Autorange,RG1,True,0,60,4.6875,-14.75)	' Freq = 60Hz
		EndIf
		If TimeIntoInterval(0,1,Hr) Then
			SDI12Recorder(TDR(),C3,"0","M!",1,0,-1)
		EndIf
		If TimeIntoInterval(0,1,Min) Then
			SDI12Recorder(LVData(),C7,"0","M!",1,0,-1)
		EndIf	
		Elapsed = Timer(1,hr, 4)
		CallTable Data_TableA
	NextScan
EndProg

' Timer 0 = start, 1= stop,  2 = reset and start, 3 = stop and reset, 4 = read only
' CurrentSE ( Dest, Reps, Range, RGChan, MeasOff, SettlingTime, freq, Multiplier, Offset)